# Generated by Dario Bassi 13/01/2026

# Reset
# unload all the device
Property,Core,Initialize,0 

# Devices
#py pyDevice,MyCamera,src.virtual_microscope.pymmcore_camera_sim,SimCameraDevice
#py pyDevice,XYStage,src.virtual_microscope.pymmcore_stage_sim,SimStageDevice
#py pyDevice,ZStage,src.virtual_microscope.pymmcore_z_stage_sim,SimZStageDevice
#py pyDevice,LED,src.virtual_microscope.pymmcore_state_device_sim,LEDDevice
#py pyDevice,Filter Wheel,src.virtual_microscope.pymmcore_state_device_sim,FilterWheelDevice
#py pyDevice,Objective,src.virtual_microscope.pymmcore_state_device_sim,ObjectiveDevice
#py pyDevice,Shutter,src.virtual_microscope.pymmcore_shutter_sim,SimShutterDevice
#py pyDevice,SLM,src.virtual_microscope.pymmcore_slm_sim,SimSLMDevice

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
# initialize all the device
Property,Core,Initialize,1 

# Delays

# Focus directions
#py FocusDirection,ZStage,0

# Roles
#py Property,Core,Camera,MyCamera
#py Property,Core,XYStage,XYStage
#py Property,Core,Focus,ZStage
#py Property,Core,Shutter,Shutter
Property,Core,AutoShutter,1  

# Camera-synchronized devices

# Labels
# LED
#py Label,LED,0,UV
#py Label,LED,1,BLUE
#py Label,LED,2,CYAN
#py Label,LED,3,GREEN
#py Label,LED,4,YELLOW
#py Label,LED,5,ORANGE
#py Label,LED,6,RED
# Fiter Wheel
#py Label,Filter Wheel,0,Electra1(402/454)
#py Label,Filter Wheel,1,SCFP2(434/474)
#py Label,Filter Wheel,2,TagGFP2(483/506)
#py Label,Filter Wheel,3,obeYFP(514/528)
#py Label,Filter Wheel,4,mRFP1-Q667(549/570)
#py Label,Filter Wheel,5,mScarlet3(569/582)
#py Label,Filter Wheel,6,miRFP670(642/670)
# Objective
#py Label,Objective,0,10x
#py Label,Objective,1,20x
#py Label,Objective,2,40x

# Configuration presets
# Group: Fake
# Preset: all-channel
#py ConfigGroup,Fake,all-channel,LED,Label,CYAN
#py ConfigGroup,Fake,all-channel,Filter Wheel,Label,TagGFP2(483/506)
# Preset: nucleus-channel
#py ConfigGroup,Fake,nucleus-channel,LED,Label,ORANGE
#py ConfigGroup,Fake,nucleus-channel,Filter Wheel,Label,mScarlet3(569/582)
# Preset: membrane-channel
#py ConfigGroup,Fake,membrane-channel,LED,Label,RED
#py ConfigGroup,Fake,membrane-channel,Filter Wheel,Label,miRFP670(642/670)

# Group: Real
# Preset: membrane-channel
#py ConfigGroup,Real,membrane-channel,LED,Label,RED
#py ConfigGroup,Real,membrane-channel,Filter Wheel,Label,miRFP670(642/670)

# Group: System
# Preset: Startup
#py ConfigGroup,System,Startup,LED,Label,UV
#py ConfigGroup,System,Startup,Filter Wheel,Label,Electra1(402/454)
#py ConfigGroup,System,Startup,Objective,Label,10x






